CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:42
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "C")
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does C "0")
    Name to assign these images:Nuclear
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "1")
    Name to assign these images:Synaptophysin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does C "2")
    Name to assign these images:PSD95
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuclear
    Name the primary objects to be identified:proposednuceli
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:Nuclear
    Select objects to measure:proposednuceli

FilterObjects:[module_num:7|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
    Select the objects to filter:proposednuceli
    Name the output objects:Nucleus
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Nuclear
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nucleus
    Name the objects to be identified:Nucelusexpandedby10
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclear
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nucelusexpandedby10
    Name the objects to be identified:Nucelusexpandedby40plusalreadyten
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Nuclear
    Number of pixels by which to expand the primary objects:40
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Nucelusexpandedby40plusalreadyten
    Select the smaller identified objects:Nucelusexpandedby10
    Name the tertiary objects to be identified:ringaroundnucleus40
    Shrink smaller object prior to subtraction?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Synaptophysin
    Name the primary objects to be identified:IdentifyPrimaryObjectss
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:PSD95
    Name the primary objects to be identified:IdentifyPrimaryObjectss2
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:Nuclear, PSD95, Synaptophysin
    Select objects to measure:IdentifyPrimaryObjectss, IdentifyPrimaryObjectss2, proposednuceli

FilterObjects:[module_num:14|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
    Select the objects to filter:IdentifyPrimaryObjectss
    Name the output objects:IdentifyPrimaryObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Synaptophysin
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
FilterObjects:[module_num:15|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
    Select the objects to filter:IdentifyPrimaryObjectss2
    Name the output objects:IdentifyPrimaryObjects2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_PSD95
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MaskObjects:[module_num:16|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
    Select objects to be masked:IdentifyPrimaryObjects
    Name the masked objects:MaskedSynaptophysin
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ringaroundnucleus40
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:IdentifyPrimaryObjects2
    Name the masked objects:MaskedPSD95
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ringaroundnucleus40
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:18|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
    Parent objects:ringaroundnucleus40
    Child objects:MaskedSynaptophysin
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:ringaroundnucleus40
    Child objects:MaskedPSD95
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
CombineObjects:[module_num:20|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
    Select initial object set:MaskedSynaptophysin
    Select object set to combine:MaskedPSD95
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedPSD95Synap

MaskObjects:[module_num:21|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enabled:False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
    Select objects to be masked:CombinedPSD95Synap
    Name the masked objects:PSD95maskedcombine
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedPSD95
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:22|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
    Select objects to be masked:CombinedPSD95Synap
    Name the masked objects:PSD95maskedcombine2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedPSD95
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:23|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enabled:False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
    Select objects to be masked:PSD95maskedcombine
    Name the masked objects:doublemaskedcombine
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedSynaptophysin
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:24|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
    Select objects to be masked:PSD95maskedcombine2
    Name the masked objects:doublemaskedcombine2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedSynaptophysin
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:CombinedPSD95Synap, doublemaskedcombine2
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

RelateObjects:[module_num:26|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
    Parent objects:CombinedPSD95Synap
    Child objects:doublemaskedcombine2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:27|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
    Parent objects:ringaroundnucleus40
    Child objects:doublemaskedcombine2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:28|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enabled:False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
    Parent objects:CombinedPSD95Synap
    Child objects:doublemaskedcombine
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
DisplayDataOnImage:[module_num:29|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
    Display object or image measurements?:Object
    Select the input objects:IdentifyPrimaryObjectss
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Synaptophysin
    Text color:red
    Name the output image that has the measurements displayed:DisplayImageSynaptophysinUnmasked
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:30|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
    Display object or image measurements?:Object
    Select the input objects:IdentifyPrimaryObjectss2
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PSD95
    Text color:red
    Name the output image that has the measurements displayed:DisplayImagePSD95Unmasked
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:31|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notes:['Image displays on NUCLEAR STAIN---NOT ITS OWN PROTEIN STAIN']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
    Display object or image measurements?:Object
    Select the input objects:MaskedSynaptophysin
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Nuclear
    Text color:red
    Name the output image that has the measurements displayed:DisplayImageSynaptophysinMasked
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:32|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
    Display object or image measurements?:Object
    Select the input objects:MaskedPSD95
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Nuclear
    Text color:red
    Name the output image that has the measurements displayed:DisplayImagePSD95Masked
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:33|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
    Display object or image measurements?:Object
    Select the input objects:doublemaskedcombine2
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Nuclear
    Text color:red
    Name the output image that has the measurements displayed:DisplayImageSynapseObjectNumbers
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:34|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
    Display object or image measurements?:Object
    Select the input objects:doublemaskedcombine2
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Nuclear
    Text color:red
    Name the output image that has the measurements displayed:DisplayImageSynapseArea
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:DisplayImageSynapseObjectNumbers
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclear
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.SynapseObjectNumber
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:DisplayImageSynapseArea
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclear
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.SynapseAreaSize
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:DisplayImagePSD95Unmasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:PSD95
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.PSD95Unmasked
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:DisplayImageSynaptophysinUnmasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:Synaptophysin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.SynaptophysinUnmaksed
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:DisplayImagePSD95Masked
    Select method for constructing file names:From image filename
    Select image name for file prefix:PSD95
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.PSD95Masked
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:DisplayImageSynaptophysinMasked
    Select method for constructing file names:From image filename
    Select image name for file prefix:Synaptophysin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.SynaptophysinMasked
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\Gen2_Zika_Experiments\\PythonFiles\\CellprofilerPipelines\\SynapseFiles
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:41|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:doublemaskedcombine
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:Nuclear
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

ExportToSpreadsheet:[module_num:42|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:doublemaskedcombine2|AreaShape_Area,doublemaskedcombine2|Location_Center_X,doublemaskedcombine2|Location_Center_Y,CombinedPSD95Synap|AreaShape_Area,CombinedPSD95Synap|Location_Center_Y,CombinedPSD95Synap|Location_Center_X
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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